<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Miniscope;assembly=Bonsai.Miniscope"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UCLAMiniscopeV4">
          <p1:Index>1</p1:Index>
          <p1:LEDBrightness>0</p1:LEDBrightness>
          <p1:EWL>0</p1:EWL>
          <p1:SensorGain>LOW</p1:SensorGain>
          <p1:FramesPerSecond>FPS30</p1:FramesPerSecond>
          <p1:LEDRespectsTrigger>false</p1:LEDRespectsTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>FrameNumber,Trigger</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>minicam-frame-gate_.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp,Value.Item1,Value.Item2</io:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>minicam_.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>50</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>1024</cv:Width>
            <cv:Height>768</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>quaternion_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>